<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='Disabled' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' ClearInventory='0' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\CTS_PrePCR\Device Files\PrePCR_BC4R_Bravo96ST.dev' Display_User_Task_Descriptions='1' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' ImportInventory='0' InventoryFile='' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Define Variables' bOnlyFirstTime='0' bPromptWhenExecuted='0' strPromptText='' >
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					<Parameters >
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					</Parameters>
					<arrVariables Vol='10' />
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='Agilent BenchCel - 1' Location_Name='Stacker 4' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='PrePCR_BravoST' Location_Name='1' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='PrePCR_BravoST' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='ReArray' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='ReArray' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Tips' />
					<Parameter Name='Plate type' Value='384 V11 ST30 Tip Box Filtered' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='PrePCR_BravoST' Location_Name='2' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='PrePCR_BravoST' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='ReArray' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='ReArray' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Source_Q1' />
					<Parameter Name='Plate type' Value='96 KingFisher 96 KF Plate (200 µl) _97002540' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='PrePCR_BravoST' Location_Name='3' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='PrePCR_BravoST' />
						<Parameter Category='' Name='Location to use' Value='3' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='ReArray' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='ReArray' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Source_Q2' />
					<Parameter Name='Plate type' Value='96 KingFisher 96 KF Plate (200 µl) _97002540' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='PrePCR_BravoST' Location_Name='8' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='PrePCR_BravoST' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='ReArray' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='ReArray' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Source_Q3' />
					<Parameter Name='Plate type' Value='96 KingFisher 96 KF Plate (200 µl) _97002540' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='PrePCR_BravoST' Location_Name='9' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='PrePCR_BravoST' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='ReArray' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='ReArray' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Source_Q4' />
					<Parameter Name='Plate type' Value='96 KingFisher 96 KF Plate (200 µl) _97002540' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='PrePCR_BravoST' Location_Name='6' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='PrePCR_BravoST' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='ReArray' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='ReArray' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Dest_384' />
					<Parameter Name='Plate type' Value='384 BioRad Hard Shell PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='ReArray' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='ReArray' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='TipTrash' />
					<Parameter Name='Plate type' Value='384 TipWaste' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='ReArray' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='72' MinRange='-11' Name='96ST, 70 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<TaskScript Name='TaskScript' Value='if (Col == 3)
{
   var Col = 1;
}' />
					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='4' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables >
						<Variable fIncrement='1' iFreqValue='0' strFrequency='Every time' strInitialValue='1' strVariableName='LoopCount' />
						<Variable fIncrement='1' iFreqValue='2' strFrequency='Every n times' strInitialValue='1' strVariableName='Row' />
						<Variable fIncrement='1' iFreqValue='0' strFrequency='Every time' strInitialValue='1' strVariableName='Col' />
					</Variables>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='//well location
task.Wellselection = [[Row,Col]];
print (&quot;loop #: &quot;+LoopCount)
print(&quot;Tips on at: &quot;+Row+&quot;, &quot;+Col);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;1&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;1&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;1&apos; Row=&apos;1&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='//Source 1 to Q1
if (LoopCount != 1)
{
task.skip ();
}

else
print (&quot;Asp. from plate: Quad 1 plate&quot;);
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Source_Q1' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=Vol' Value='10' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 2 - 50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.1' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='//Source 2 to Q2
if (LoopCount != 2)
{
task.skip ();
}

else
print (&quot;Asp. from plate: Quad 2 plate&quot;);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Source_Q2' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=Vol' Value='10' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 2 - 50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='//Source 3 to Q3
if (LoopCount != 3)
{
task.skip ();
}

else
print (&quot;Asp. from plate: Quad 3 plate&quot;);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Source_Q3' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=Vol' Value='10' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 2 - 50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='//Source 4 to Q4
if (LoopCount != 4)
{
task.skip ();
}

else
print (&quot;Asp. from plate: Quad 4 plate&quot;);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Source_Q4' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=Vol' Value='10' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 2 - 50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='//well location
task.Wellselection = [[Row,Col]];
print (&quot;loop #: &quot;+LoopCount)
print(&quot;Disp. at 384 Destination: &quot;+Row+&quot;, &quot;+Col);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Dest_384' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;1&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;1&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='5' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='TipTrash' />
						<Parameter Category='' Name='Location, location' Value='4' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='0' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;1&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='7' />
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					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='PrePCR_BravoST' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
		<Cleanup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='cleanup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Cleanup_Processes>
	</Processes>
</Velocity11>